strdef pop_file,error_file,target_dir

// pop_file="ga_result_85_CDK20041206_BAC_run1_seed_3456/clean_population_file.txt"
// error_file="ga_result_85_CDK20041206_BAC_run1_seed_3456/clean_error_file.txt"
// target_dir="results/85_CDK20041206_BAC_run1_analysis"
//pop_file="ga_result_86_CDK20041214_BAC_run3_seed_4223/clean_population_file.txt"
//error_file="ga_result_86_CDK20041214_BAC_run3_seed_4223/clean_error_file.txt"
//target_dir="results/86_CDK20041214_BAC_run3_analysis"
pop_file="ga_result_86_CDK20041214_BAC_run5_seed_4223/clean_population_file.txt"
error_file="ga_result_86_CDK20041214_BAC_run5_seed_4223/clean_error_file.txt"
target_dir="results/86_CDK20041214_BAC_run5_analysis"
// pop_file="ga_result_86_CDK20041214_BAC_run9_seed_5432/clean_population_file.txt"
// error_file="ga_result_86_CDK20041214_BAC_run9_seed_5432/clean_error_file.txt"
// target_dir="results/86_CDK20041214_BAC_run9_analysis"
// pop_file="ga_result_86_CDK20041214_BAC_run9_StepFiring_run1_seed_6543/clean_population_file.txt"
// error_file="ga_result_86_CDK20041214_BAC_run9_StepFiring_run1_seed_6543/clean_error_file.txt"
// target_dir="results/86_CDK20041214_BAC_run9_StepFiring_run1_seed_6543_analysis"
// pop_file="ga_result_86_CDK20041214_BAC_run9_StepFiring_run2_seed_7654/clean_population_file.txt"
// error_file="ga_result_86_CDK20041214_BAC_run9_StepFiring_run2_seed_7654/clean_error_file.txt"
// target_dir="results/86_CDK20041214_BAC_run9_StepFiring_run2_seed_7654_analysis"
// pop_file="ga_result_91_CDK20050815_BAC_run2_seed_6789/clean_population_file.txt"
// error_file="ga_result_91_CDK20050815_BAC_run2_seed_6789/clean_error_file.txt"
// target_dir="results/91_CDK20050815_BAC_run2_analysis"
// pop_file="ga_result_93_CDK20060808_BAC_run2_seed_1234/clean_population_file.txt"
// error_file="ga_result_93_CDK20060808_BAC_run2_seed_1234/clean_error_file.txt"
// target_dir="results/93_CDK20060808_BAC_run2_analysis"
// pop_file="ga_result_93_CDK20060808_BAC_run3_seed_54321/clean_population_file.txt"
// error_file="ga_result_93_CDK20060808_BAC_run3_seed_54321/clean_error_file.txt"
// target_dir="results/93_CDK20060808_BAC_run3_analysis"
// pop_file="ga_result_84_CDK20050929_BAC_run2_seed_4321/clean_population_file.txt"
// error_file="ga_result_84_CDK20050929_BAC_run2_seed_4321/clean_error_file.txt"
// target_dir="results/84_CDK20050929_BAC_run2_analysis"
//pop_file = "arf"
